PsychoPy2experiment version="1.85.4"
Settings
  Monitor = testMonitor
  color = $[1.000,1.000,1.000]
  Experiment info = {u'participant': u''}
  Units = use prefs
  Window size (pixels) = [1680, 1050]
  Full-screen window = True
  Data filename = u'data' + os.sep + '%s_%s' % (expInfo['participant'], expInfo['date'])
  expName = discrimination_axb
  logging level = debug
  Screen = 1
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Routines
  Routine trial
    SoundComponent sound_stim1
      sound [set every repeat] = $stim1
      stopVal [duration (s)] = 0.25
      startVal [time (s)] = 0.25
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    SoundComponent sound_stim2
      sound [set every repeat] = $stim2
      stopVal [duration (s)] = 0.25
      startVal [time (s)] = 1
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    SoundComponent sound_stim3
      sound [set every repeat] = $stim3
      stopVal [duration (s)] = 0.25
      startVal [time (s)] = 1.75
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    TextComponent text_response_first
      color = black
      text = First is different
      stopVal [duration (s)] = 2.75
      pos = [-0.5, 0]
      startVal [time (s)] = 2.0
      letterHeight = 0.1
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    TextComponent text_response_third
      color = black
      text = Third is different
      stopVal [duration (s)] = 2.75
      pos = [0.5, 0]
      startVal [time (s)] = 2.0
      letterHeight = 0.1
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    TextComponent text_response_same
      color = black
      text = They are the same
      stopVal [duration (s)] = 2.75
      pos = (0, -0.5)
      startVal [time (s)] = 2.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_trial
      correctAns = $isCorrect
      storeCorrect = True
      stopVal [duration (s)] = 2.75
      forceEndRoutine = True
      discard previous = False
      allowedKeys [set every repeat] = '1','0','space'
      startVal [time (s)] = 2.0
      store = first key
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    TextComponent text_trial_cross
      color = red
      text = +
      stopVal [duration (s)] = 0.2
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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  Routine end
    TextComponent text_end
      color = black
      text = Thank you.
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_end
      forceEndRoutine = False
      discard previous = False
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine instructions
    TextComponent insructions
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Listen to the following sequences of sounds.

        Your task is to determine if one of the sounds is different.

        If the first sound is different press 1. If the third sound is different press 0. If they are the same press the space bar.

        Respond as quickly as possible without making mistakes.

        Press the space bar to begin.
    KeyboardComponent key_resp_ins
      forceEndRoutine = True
      discard previous = False
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = condition_file/trials.csv
    loopType = random
    nReps = 3
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    conditions:
      [{'stim1': u'stim/bda0.wav', 'stim2': u'stim/bda5.wav', 'stim3': u'stim/bda6.wav', 'isCorrect': u'1', 'trialType': u'abb', 'diffCategory': u'first'},
      {'stim1': u'stim/bda1.wav', 'stim2': u'stim/bda5.wav', 'stim3': u'stim/bda6.wav', 'isCorrect': u'1', 'trialType': u'abb', 'diffCategory': u'first'},
      {'stim1': u'stim/bda2.wav', 'stim2': u'stim/bda5.wav', 'stim3': u'stim/bda6.wav', 'isCorrect': u'1', 'trialType': u'abb', 'diffCategory': u'first'},
      {'stim1': u'stim/bda0.wav', 'stim2': u'stim/bda4.wav', 'stim3': u'stim/bda5.wav', 'isCorrect': u'1', 'trialType': u'abb', 'diffCategory': u'first'},
      {'stim1': u'stim/bda1.wav', 'stim2': u'stim/bda4.wav', 'stim3': u'stim/bda5.wav', 'isCorrect': u'1', 'trialType': u'abb', 'diffCategory': u'first'},
      {'stim1': u'stim/bda2.wav', 'stim2': u'stim/bda4.wav', 'stim3': u'stim/bda5.wav', 'isCorrect': u'1', 'trialType': u'abb', 'diffCategory': u'first'},
      {'stim1': u'stim/bda0.wav', 'stim2': u'stim/bda6.wav', 'stim3': u'stim/bda5.wav', 'isCorrect': u'1', 'trialType': u'abb', 'diffCategory': u'first'},
      {'stim1': u'stim/bda1.wav', 'stim2': u'stim/bda6.wav', 'stim3': u'stim/bda5.wav', 'isCorrect': u'1', 'trialType': u'abb', 'diffCategory': u'first'},
      {'stim1': u'stim/bda2.wav', 'stim2': u'stim/bda6.wav', 'stim3': u'stim/bda5.wav', 'isCorrect': u'1', 'trialType': u'abb', 'diffCategory': u'first'},
      {'stim1': u'stim/bda4.wav', 'stim2': u'stim/bda1.wav', 'stim3': u'stim/bda0.wav', 'isCorrect': u'1', 'trialType': u'baa', 'diffCategory': u'first'}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
    Routine trial
  LoopTerminator trials
  Routine end
