PsychoPy2experiment version="1.85.4"
Settings
  Monitor = testMonitor
  Experiment info = {u'participant': u'', u'country': u'', u'age': u'', u'highest level of ed': u'', u'gender': u'', u'place of residence': u'city,state'}
  Units = use prefs
  Window size (pixels) = [1680, 1050]
  Full-screen window = True
  expName = blp
  Screen = 1
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Routines
  Routine lang_use_ins
    TextComponent text_lang_use_ins
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Language use

        In this section, we would like you to answer some questions about your language use by placing a check in the appropriate box. Total use for all languages in a given question should equal 100%.

        Press the spacebar to begin.
    KeyboardComponent key_resp_lang_use
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine language_use
    TextComponent text_section_lang_use
      color = black
      pos = (0, 0.75)
      text [set every repeat] = $section
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_lang_use_question
      text [set every repeat] = $questionText
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_lang_use_lang
      color = blue
      pos = (0, -0.3)
      text [set every repeat] = $language
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_lang_use_qnum
      pos = (-0.9, 0.9)
      text [set every repeat] = $questionNum
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    RatingScaleComponent rating_lang_use
      labels = 0%, 100%
      pos = 0, -0.5
      high = 100
      startVal [time (s)] = 0.0
      size = 0.8
      forceEndRoutine = True
      low = 0
      categoryChoices = 0, 10, 20, 40, 50, 60, 70, 80, 90, 100
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  Routine language_attitudes
    TextComponent text_lang_att_section
      color = black
      text [set every repeat] = $section
      pos = (0, 0.75)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_lang_att_ques
      text [set every repeat] = $questionText
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_lang_att_qnum
      text [set every repeat] = $questionNum
      pos = (-0.9, 0.9)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    RatingScaleComponent rating_lang_att
      labels = disagree, agree
      pos = 0, -0.4
      high = 6
      startVal [time (s)] = 0.0
      size = 1.0
      forceEndRoutine = True
      low = 0
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  Routine lang_hist_ins
    TextComponent text_lang_his_ins
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Language history

        In this section, we would like you to answer some factual questions about your language history by placing a check in the appropriate box.

        Press the spacebar to begin.
    KeyboardComponent key_resp_lang_hist
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine lang_att_ins
    TextComponent text_lang_att_ins
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Language attitudes

        In this section, we would like you to respond to statements about language attitudes by giving marks from 0-6.

        Press the spacebar to begin.
    KeyboardComponent key_resp_lang_att_ins
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine language_proficiency
    TextComponent text_section_lang_prof
      color = black
      text [set every repeat] = $section
      pos = (0, 0.75)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_lang_prof_question
      text [set every repeat] = $questionText
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_lang_prof_lang
      color = blue
      text [set every repeat] = $language
      pos = (0.0, -0.2)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_lang_prof_qnum
      text [set every repeat] = $questionNum
      pos = (-0.9, 0.9)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_lang_prof_qmark
      text [set every repeat] = ?
      pos = (0.17, -0.2)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    RatingScaleComponent rating_lang_prof
      labels = Not well at all, Very well
      pos = 0, -0.4
      high = 6
      startVal [time (s)] = 0.0
      size = 1.0
      forceEndRoutine = True
      low = 0
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  Routine language_history
    TextComponent text_section_lang_hist
      color = black
      pos = (0, 0.75)
      text [set every repeat] = $section
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_lang_hist_question
      text [set every repeat] = $questionText
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_lang_hist_lang
      color = blue
      pos = (0, -0.3)
      text [set every repeat] = $language
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_lang_hist_qnum
      pos = (-0.9, 0.9)
      text [set every repeat] = $questionNum
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    RatingScaleComponent rating_lang_hist
      labels = Since birth, 20+
      pos = 0, -0.5
      high = 20
      startVal [time (s)] = 0.0
      size = 1.0
      forceEndRoutine = True
      low = 0
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  Routine lang_prof_ins
    TextComponent text_lang_prof_ins
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Language proficiency

        In this section, we would like you to rate your language proficiency by giving marks from 0 to 6.

        Press the spacebar to begin
    KeyboardComponent key_resp_lang_prof_ins
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructions
    TextComponent text_instructions
      text = We would like to ask you to help us by answering the following questions concerning your language history, use, attitudes, and proficiency. This survey was created with support from the Center for Open Educational Resources and Language Learning at the University of Texas at Austin to better understand the profiles of bilingual speakers in diverse settings with diverse backgrounds. The survey consists of 19 questions and will take less than 10 minutes to complete. This is not a test, so there are no right or wrong answers. Please answer every question and give your answers sincerely. Thank you very much for your help.
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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    KeyboardComponent key_resp_instructions
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instructions
  Routine lang_hist_ins
  LoopInitiator trials_hist loopType="TrialHandler"
    conditionsFile = condition_file/en_trials.csv
    loopType = sequential
    nReps = 1
    Selected rows = '0:12'
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    conditions:
      [{'section': u'Language history', 'questionText': u'At what age did you start learning the following languages?', 'language': u'English', 'questionNum': u'1a'},
      {'section': u'Language history', 'questionText': u'At what age did you start learning the following languages?', 'language': u'Spanish', 'questionNum': u'1b'},
      {'section': u'Language history', 'questionText': u'At what age did you start to feel comfortable using the following languages?', 'language': u'English', 'questionNum': u'2a'},
      {'section': u'Language history', 'questionText': u'At what age did you start to feel comfortable using the following languages?', 'language': u'Spanish', 'questionNum': u'2b'},
      {'section': u'Language history', 'questionText': u'How many years of classes (grammar, history, math, etc.) have you had in the following languages (primary school through university)?', 'language': u'English', 'questionNum': u'3a'},
      {'section': u'Language history', 'questionText': u'How many years of classes (grammar, history, math, etc.) have you had in the following languages (primary school through university)?', 'language': u'Spanish', 'questionNum': u'3b'},
      {'section': u'Language history', 'questionText': u'How many years have you spent in a country/region where the following languages are spoken?', 'language': u'English', 'questionNum': u'4a'}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
    Routine language_history
  LoopTerminator trials_hist
  Routine lang_use_ins
  LoopInitiator trials_use loopType="TrialHandler"
    conditionsFile = condition_file/en_trials.csv
    loopType = sequential
    nReps = 1
    Selected rows = '12:27'
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    conditions:
      [{'section': u'Language history', 'questionText': u'At what age did you start learning the following languages?', 'language': u'English', 'questionNum': u'1a'},
      {'section': u'Language history', 'questionText': u'At what age did you start learning the following languages?', 'language': u'Spanish', 'questionNum': u'1b'},
      {'section': u'Language history', 'questionText': u'At what age did you start to feel comfortable using the following languages?', 'language': u'English', 'questionNum': u'2a'},
      {'section': u'Language history', 'questionText': u'At what age did you start to feel comfortable using the following languages?', 'language': u'Spanish', 'questionNum': u'2b'},
      {'section': u'Language history', 'questionText': u'How many years of classes (grammar, history, math, etc.) have you had in the following languages (primary school through university)?', 'language': u'English', 'questionNum': u'3a'},
      {'section': u'Language history', 'questionText': u'How many years of classes (grammar, history, math, etc.) have you had in the following languages (primary school through university)?', 'language': u'Spanish', 'questionNum': u'3b'},
      {'section': u'Language history', 'questionText': u'How many years have you spent in a country/region where the following languages are spoken?', 'language': u'English', 'questionNum': u'4a'}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
    Routine language_use
  LoopTerminator trials_use
  Routine lang_prof_ins
  LoopInitiator trials_prof loopType="TrialHandler"
    conditionsFile = condition_file/en_trials.csv
    loopType = sequential
    nReps = 1
    Selected rows = '27:35'
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    conditions:
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    Routine language_proficiency
  LoopTerminator trials_prof
  Routine lang_att_ins
  LoopInitiator trials_att loopType="TrialHandler"
    conditionsFile = condition_file/en_trials.csv
    loopType = sequential
    nReps = 1
    Selected rows = '35:43'
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    conditions:
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    Routine language_attitudes
  LoopTerminator trials_att
