PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {u'proficiency': u'', u'expLang': u'en,sp', u'participant': u''}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = use prefs
  Use version = latest
  Window size (pixels) = [1680, 1050]
  expName = lexTALE
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Routines
  Routine end
    TextComponent end_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = ¡Gracias!
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    KeyboardComponent key_resp_end
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      store = nothing
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  Routine feedback
    CodeComponent code1
      Code Type = Auto->JS
      Begin Experiment:
        msg='doh!'
      Begin Routine:
        if not key_resp_practice1.keys:
            msg="Failed to resond"
        elif key_resp_practice1.corr:
            msg="Correcto!"
        else:
            msg="Ooo! Wrong! Te has equivocado!"
    KeyboardComponent key_resp_feedback1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      store = nothing
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    TextComponent feedback1_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine practice
    TextComponent practice_text
      letterHeight = 0.3
      startVal [time (s)] = 0.5
      text [set every repeat] = $word
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    KeyboardComponent key_resp_practice1
      allowedKeys = '1','0'
      correctAns = $correct_response
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      store = first key
      storeCorrect = True
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    TextComponent practice_text2
      color = blue
      letterHeight = 0.08
      pos = (0, 0.75)
      startVal [time (s)] = 0.5
      text [set every repeat] = $prac_label
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    TextComponent practice_text_real
      color = green
      letterHeight = 0.2
      pos = (-0.5, -0.5)
      startVal [time (s)] = 0.5
      text [set every repeat] = $prac_button_real
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    TextComponent practice_text_false
      color = red
      letterHeight = 0.2
      pos = (0.5, -0.5)
      startVal [time (s)] = 0.5
      text [set every repeat] = $prac_button_false
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  Routine trial
    TextComponent trial_text
      letterHeight = 0.3
      startVal [time (s)] = 0.5
      text [set every repeat] = $word
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    TextComponent trial_text_real
      color = green
      letterHeight = 0.2
      pos = (-0.5, -0.5)
      startVal [time (s)] = 0.25
      text [set every repeat] = $button_real
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    TextComponent trial_text_false
      color = red
      letterHeight = 0.2
      pos = (0.5, -0.5)
      startVal [time (s)] = 0.25
      text [set every repeat] = $button_false
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    KeyboardComponent key_resp_trial
      allowedKeys = '1','0'
      correctAns = $correct_response
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      store = first key
      storeCorrect = True
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  Routine check
    TextComponent check_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Any questions? ¿Preguntas?

        Press the space bar to begin.
        Presiona la barra espaciadora para comenzar.
    KeyboardComponent key_resp_check
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      store = nothing
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  Routine instructions
    TextComponent instructions_text1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $instructions_text
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    KeyboardComponent instructions_key_resp_1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  LoopInitiator instructions_loop loopType="TrialHandler"
    conditionsFile = cond_files/instructions/instructions_sp.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('instructions_text', 'Hola, este es un test de vocabulario Español. \n\nEn la página siguiente encontrarás 90 secuencias de letras que parecen “españolas”. Solo algunas de ellas son palabras de verdad.')]),
      OrderedDict([('instructions_text', 'Por favor, señala las palabras que tú conoces (aquellas que estás convencido que son palabras españolas, incluso aunque no seas capaz de dar el significado preciso). \n\nPero ten cuidado: Los errores se penalizan. Por eso, no tiene sentido tratar de incrementar tu puntuación marcando “palabras” que no has visto nunca.')]),
      OrderedDict([('instructions_text', 'Todo lo que tienes que hacer es apretar el botón de la izquierda si es una palabra real o el botón de la derecha si no es una palabra real. \n\nVamos a practicar un poco...')])]
    Routine instructions
  LoopTerminator instructions_loop
  LoopInitiator practice_trials loopType="TrialHandler"
    conditionsFile = cond_files/trials/prac_trials_sp.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('stim', 0), ('word', 'depiste'), ('correct_response', 0), ('prac_label', 'PRÁCTICA'), ('prac_button_real', 'REAL'), ('prac_button_false', 'FALSA')]),
      OrderedDict([('stim', 0), ('word', 'sí'), ('correct_response', 1), ('prac_label', 'PRÁCTICA'), ('prac_button_real', 'REAL'), ('prac_button_false', 'FALSA')]),
      OrderedDict([('stim', 0), ('word', 'coné'), ('correct_response', 0), ('prac_label', 'PRÁCTICA'), ('prac_button_real', 'REAL'), ('prac_button_false', 'FALSA')]),
      OrderedDict([('stim', 0), ('word', 'calpar'), ('correct_response', 0), ('prac_label', 'PRÁCTICA'), ('prac_button_real', 'REAL'), ('prac_button_false', 'FALSA')]),
      OrderedDict([('stim', 0), ('word', 'joten'), ('correct_response', 0), ('prac_label', 'PRÁCTICA'), ('prac_button_real', 'REAL'), ('prac_button_false', 'FALSA')]),
      OrderedDict([('stim', 0), ('word', 'sacapuntas'), ('correct_response', 1), ('prac_label', 'PRÁCTICA'), ('prac_button_real', 'REAL'), ('prac_button_false', 'FALSA')]),
      OrderedDict([('stim', 0), ('word', 'priba'), ('correct_response', 0), ('prac_label', 'PRÁCTICA'), ('prac_button_real', 'REAL'), ('prac_button_false', 'FALSA')]),
      OrderedDict([('stim', 0), ('word', 'pelasula'), ('correct_response', 0), ('prac_label', 'PRÁCTICA'), ('prac_button_real', 'REAL'), ('prac_button_false', 'FALSA')]),
      OrderedDict([('stim', 0), ('word', 'bien'), ('correct_response', 1), ('prac_label', 'PRÁCTICA'), ('prac_button_real', 'REAL'), ('prac_button_false', 'FALSA')])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
    Routine practice
    Routine feedback
  LoopTerminator practice_trials
  Routine check
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = cond_files/trials/trials_sp.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('stim', 1), ('word', 'terzo'), ('correct_response', 0), ('button_real', 'REAL'), ('button_false', 'FALSA')]),
      OrderedDict([('stim', 2), ('word', 'pellizcar'), ('correct_response', 1), ('button_real', 'REAL'), ('button_false', 'FALSA')]),
      OrderedDict([('stim', 3), ('word', 'pulmones'), ('correct_response', 1), ('button_real', 'REAL'), ('button_false', 'FALSA')]),
      OrderedDict([('stim', 4), ('word', 'batillón'), ('correct_response', 0), ('button_real', 'REAL'), ('button_false', 'FALSA')]),
      OrderedDict([('stim', 5), ('word', 'zapato'), ('correct_response', 1), ('button_real', 'REAL'), ('button_false', 'FALSA')]),
      OrderedDict([('stim', 6), ('word', 'tergiversar'), ('correct_response', 1), ('button_real', 'REAL'), ('button_false', 'FALSA')]),
      OrderedDict([('stim', 7), ('word', 'pésimo'), ('correct_response', 1), ('button_real', 'REAL'), ('button_false', 'FALSA')]),
      OrderedDict([('stim', 8), ('word', 'cadeña'), ('correct_response', 0), ('button_real', 'REAL'), ('button_false', 'FALSA')]),
      OrderedDict([('stim', 9), ('word', 'hacha'), ('correct_response', 1), ('button_real', 'REAL'), ('button_false', 'FALSA')]),
      OrderedDict([('stim', 10), ('word', 'antar'), ('correct_response', 0), ('button_real', 'REAL'), ('button_false', 'FALSA')]),
      OrderedDict([('stim', 11), ('word', 'cenefa'), ('correct_response', 1), ('button_real', 'REAL'), ('button_false', 'FALSA')]),
      OrderedDict([('stim', 12), ('word', 'asesinato'), ('correct_response', 1), ('button_real', 'REAL'), ('button_false', 'FALSA')])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
    Routine trial
  LoopTerminator trials
  Routine end
